PsychoPy2experiment version="2025.2.0"
Settings
  Audio lib = ptb
  Experiment info = {'participant': 'f"{randint(0, 999999):06.0f}"', 'session': '"001"'}
  Full-screen window = False
  Monitor = testMonitor
  Screen = 1
  Units = height
  Window size (pixels) = (1000, 700)
  expName = Solo Project Experiment 1
  keyboardBackend = PsychToolbox
  runMode = 1
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Routines
  Routine fixation
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    TextComponent text
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1.0
      text [set every repeat] = +
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  Routine instruction_text
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    TextComponent text_2
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 3.0
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      text [set every repeat]:
        Welcome to the experiment!

        You will hear a tone followed by a colored circle.

        - Press 'r' if the circle is RED.
        - Press 'b' if the circle is BLUE.

        Please respond as quickly and accurately as possible.

        Press SPACE key to begin.
    KeyboardComponent start_key
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine trial
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    SoundComponent tone
      forceEndRoutine = False
      sound [set every repeat] = $frequency
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1.0
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    PolygonComponent circle
      fillColor [set every repeat] = $color
      shape = circle
      size = (0.2, 0.2)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 2.0
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    KeyboardComponent key_resp
      allowedKeys [set every repeat] = 'r','b'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
      storeCorrect = True
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    TextComponent fix_after
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 0.5
      text = +
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  Routine thanks
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    TextComponent text_3
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 3.0
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      text [set every repeat]:
        Thank you for participating!
Flow
  Routine fixation
  Routine instruction_text
  LoopInitiator trials loopType="TrialHandler"
    conditionsFile = C:/Users/Ashmita/Downloads/conditions.xlsx
    loopType = random
    nReps = 5
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    conditions:
      [{'frequency': 300, 'color': 'red', 'correct_key': 'r'},
      {'frequency': 300, 'color': 'blue', 'correct_key': 'b'},
      {'frequency': 1000, 'color': 'red', 'correct_key': 'r'},
      {'frequency': 1000, 'color': 'blue', 'correct_key': 'b'}]
    Routine trial
  LoopTerminator trials
  Routine thanks
